# User defined command_file for plastimatch registration

#  STEP 1: Align Center
[STAGE]
fixed_roi_enable=false
moving_roi_enable=false
xform=align_center
 
# STEP 3: Registration using masks for lesions and bones
[STAGE]
fixed_roi_enable=false
moving_roi_enable=false
#threading=cuda
xform=bspline
optim=lbfgsb
impl=plastimatch
regularization_lambda=0.00001
#landmark_stiffness=100
metric=mi
mi_histogram_bins=32
max_its=100
ss=4 4 2
# B-spline grid spacing (in mm)
grid_spac=80 80 80 
#img_out=./regMid-w-gpumiBSP-01-00001.mha

[STAGE]
fixed_roi_enable=false
moving_roi_enable=false
max_its=50
ss=2 2 2
grid_spac=40 40 40 
#img_out=./regMid-w-gpumiBSP-02-00001.mha

[STAGE]
fixed_roi_enable=false
moving_roi_enable=false
max_its=10
ss=1 1 1
grid_spac=20 20 20 


